PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1600, 1200]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = stroop-example
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent target
      color [set every repeat] = $colour
      text [set every repeat] = $word
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent response
      correctAns = $corAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right','down'
      startVal [time (s)] = 0.5
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  Routine end
    TextComponent text
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The End

        Thank you for participating!
  Routine instructinos
    TextComponent instrText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Instructions

        Remember, choose the colour of the letters ignoring the word.

        LEFT=red
        DOWN= green
        RIGHT=blue

        Press any key to start
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructinos
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{u'Colour': u'red', u'word': u'red', u'congruent': 1, u'corAns': u'left'},
      {u'Colour': u'green', u'word': u'red', u'congruent': 0, u'corAns': u'down'},
      {u'Colour': u'green', u'word': u'green', u'congruent': 1, u'corAns': u'down'},
      {u'Colour': u'blue', u'word': u'green', u'congruent': 0, u'corAns': u'right'},
      {u'Colour': u'blue', u'word': u'blue', u'congruent': 1, u'corAns': u'right'},
      {u'Colour': u'red', u'word': u'blue', u'congruent': 0, u'corAns': u'left'}]
    Routine trial
  LoopTerminator trials
  Routine end
