PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'session': u'01', u'participant': u''}
  Units = norm
  Save excel file = True
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = stroop
  logging level = warning
  Screen = 1
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = "left","down","right"
      startVal [time (s)] = 0.5
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.1
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.csv
    loopType = random
    nReps = 5
    endPoints = [1, 2]
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    conditions:
      [{'text': u'red', 'congruent': 1, 'corrAns': u'left', 'letterColor': u'red'},
      {'text': u'red', 'congruent': 0, 'corrAns': u'down', 'letterColor': u'green'},
      {'text': u'green', 'congruent': 1, 'corrAns': u'down', 'letterColor': u'green'},
      {'text': u'green', 'congruent': 0, 'corrAns': u'right', 'letterColor': u'blue'},
      {'text': u'blue', 'congruent': 1, 'corrAns': u'right', 'letterColor': u'blue'},
      {'text': u'blue', 'congruent': 0, 'corrAns': u'left', 'letterColor': u'red'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
