PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['Participant'], expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'Eye Tracker': u'tobii_std.yaml', u'Participant': u''}
  expName = stroop
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine fixation
    TextComponent text
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine trial
    TextComponent stimulus
      color [set every repeat] = $stimColor
      text [set every repeat] = $stimText
      stopVal [duration (s)] = 10
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 10
      forceEndRoutine = True
      allowedKeys = "left","down","right"
      startVal [time (s)] = 0.0
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    CodeComponent eye_track_code
      Begin Experiment:
        import csv

        #Lets have a flag to say our header has not been written to gaze data file
        header_written = False

        eyetracker =False#will change if we get one!

        if expInfo['Eye Tracker']:
            from psychopy.iohub import EventConstants,ioHubConnection,load,Loader
            from psychopy.data import getDateStr
            # Load the specified iohub configuration file converting it to a python dict.
            io_config=load(file(expInfo['Eye Tracker'],'r'), Loader=Loader)

            # Add / Update the session code to be unique. Here we use the psychopy getDateStr() function for session code generation
            session_info=io_config.get('data_store').get('session_info')
            session_info.update(code="S_%s"%(getDateStr()))

            # Create an ioHubConnection instance, which starts the ioHubProcess, and informs it of the requested devices and their configurations.
            io=ioHubConnection(io_config)

            iokeyboard=io.devices.keyboard
            mouse=io.devices.mouse
            if io.getDevice('tracker'):
                eyetracker=io.getDevice('tracker')
                #Make smaller screen and minimize
                win.fullscr = False
                win.flip()
                win.winHandle.minimize()
                win.flip()

                #Run our calibration
                eyetracker.runSetupProcedure()

                #Once complete, bring our exp screen back
                win.fullscr = True
                win.winHandle.activate()
                win.winHandle.maximize()

            x,y=0,0


        #Now lets open up a data file to save our Gaze data
        file_name = u'data' + os.sep + str(expInfo['Participant'])+"_"+str(expInfo['date'])+"_gazedata.csv"

        gaze_file = open(file_name, "wb")
        writer = csv.writer(gaze_file)
      Begin Routine:
        if eyetracker:
            #Clear any events ready to start recording
            io.clearEvents('all')
            #Now fetch some data at the start of the routine.
            eyetracker.setRecordingState(True)
      End Routine:
        #If we had an eye tracker available, then lets dump out our data that should have been recorded
        if eyetracker:
            #Here is what we captured during the recording...
            outdata = eyetracker.getEvents()

            #Lets say that we are not recording now
            eyetracker.setRecordingState(False)

            #append any new data
            for index, row in enumerate(outdata):
                #dict_temp = dict((name, getattr(row, name)) for name in dir(row) if not name.startswith('__'))
                dict_temp = row._asdict()

                #ADD IN OUR NEW DATA HERE QUICKLY
                dict_temp.update({'stim_colour': stimColor})

                #Have we written the header yet?
                if header_written == False:
                    writer.writerow(dict_temp.keys())
                    header_written = True #Dont do it again!

                #Write out data row
                writer.writerow(dict_temp.values())
      End Experiment:
        if eyetracker:
            eyetracker.setConnectionState(False)
            io.quit()
            gaze_file.close()
  Routine instruct
    TextComponent instrText
      wrapWidth = 800
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        OK. Ready?

        Remember:
        1) Stay fixated on the central white dot.
        2) Ignore the word itself; press:
        	- Left for red LETTERS
        	- Down for green LETTERS
        	- Right for blue LETTERS
        	- (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      wrapWidth = 800
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.1
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 3
    endPoints = [1, 2]
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    conditions:
      [{u'stimColor': u'red', u'stimText': u'red', u'congruent': 1, u'corrAns': u'left'},
      {u'stimColor': u'green', u'stimText': u'red', u'congruent': 0, u'corrAns': u'down'},
      {u'stimColor': u'green', u'stimText': u'green', u'congruent': 1, u'corrAns': u'down'},
      {u'stimColor': u'blue', u'stimText': u'green', u'congruent': 0, u'corrAns': u'right'},
      {u'stimColor': u'blue', u'stimText': u'blue', u'congruent': 1, u'corrAns': u'right'},
      {u'stimColor': u'red', u'stimText': u'blue', u'congruent': 0, u'corrAns': u'left'}]
    Routine fixation
    Routine trial
  LoopTerminator trials
  Routine thanks
